PsychoPy2experiment version="2024.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save hdf5 file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = final_exp_1.2_v1_18012024
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine thank_you
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Thanks !! 
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        #eyetracker.setRecordingState(False)
  Routine Start
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    TextComponent welcome
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Welcome !

        Please stay foucse on the screen
    CodeComponent code_3
      Code Type = Py
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      Before Experiment:
        import serial
        from pylsl import StreamInfo, StreamOutlet

        # Set up LabStreamingLayer stream.
        info = StreamInfo(name='Mobi_experiment', type='Markers', channel_count=1,
                              channel_format='int32', source_id='12345')
        outlet = StreamOutlet(info)  # Broadcast the stream.
  Routine Block2
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Take Rest  :) .
        Press space to continue!
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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  Routine vedio_withaudio_B1
    RoutineSettingsComponent vedio_withaudio_B1
      stopVal [duration (s)] = 1.3
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    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        import random
        # standard_tone
        standard_tone = r"C:\Users\user\Documents\PRAGYA\experiment1.2\iphone_sound.wav"
        #deviant_tone
        deviant_tone = r"C:\Users\user\Documents\PRAGYA\experiment1.2\bing.wav"
        def gen_rnd(start, end,total_trail):
            while(1):
                random_numbers = np.random.randint(start, end, 150)
                #print(random_numbers)
                random_numbers = np.cumsum(random_numbers)
                if random_numbers[-1]>total_trail or random_numbers[-1]<total_trail - start:
                    continue
                else:
                    return random_numbers
        def MMN_stimuli(num_trials,deviant_tone,standard_tone,deviant_freq= (3,9)):
            tone =[]
            deviant_trail = gen_rnd(deviant_freq[0],deviant_freq[1],num_trials)
            for n in range(1,num_trials+1):
                if n in deviant_trail:
                        tone.append(deviant_tone)
                else:
                    tone.append(standard_tone)
            return tone

        tones = MMN_stimuli(900,deviant_tone,standard_tone)
      Begin Routine:
        tone = tones[trials.thisN]
        stimuli_start = 0.3 + (random.randint(0,10)*.01)
        stimuli_dur = 0.5 +(random.randint(0,10)*.01)
    MovieComponent movie
      No audio = True
      backend = ffpyplayer
      forceEndRoutine = False
      movie = C:\Users\user\Documents\PRAGYA\experiment1.2/SAND ART _Return to Yourself_ by Kseniya Simonova.mp4
      size = (1.5,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.3
      stopWithRoutine = False
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    SoundComponent sound_1
      sound [set every repeat] = $tone
      startVal [time (s)] = $stimuli_start
      stopVal [duration (s)] = $stimuli_dur
      volume = .3
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  Routine Vedio_audio_B2
    RoutineSettingsComponent Vedio_audio_B2
      stopVal [duration (s)] = 1.3
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        # standard_tone as Deviant
        tones_DT = MMN_stimuli(900,standard_tone,deviant_tone)
      Begin Routine:
        tone = tones_DT[trials_2.thisN]
        stimuli_start = 0.3 + (random.randint(0,10)*.01)
        stimuli_dur = 0.5 +(random.randint(0,10)*.01)
    MovieComponent movie_2
      No audio = True
      backend = ffpyplayer
      forceEndRoutine = False
      movie = C:\Users\user\Documents\PRAGYA\experiment1.2/SAND ART _Return to Yourself_ by Kseniya Simonova.mp4
      size = (1.5,1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.3
      stopWithRoutine = False
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    SoundComponent sound_2
      sound [set every repeat] = $tone
      startVal [time (s)] = $stimuli_start
      stopVal [duration (s)] = $stimuli_dur
      volume = .3
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  Routine start_again
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        Welcome back!
Flow
  Routine Start
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 20
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    conditions:
      [{'audio_file': 'P:\\OneDrive - IIT Delhi\\IIT D PhD\\Research work\\Smartphone addiction\\Experiment1.2\\code\\iphone_sound.wav'},
      {'audio_file': 'P:\\OneDrive - IIT Delhi\\IIT D PhD\\Research work\\Smartphone addiction\\Experiment1.2\\code\\bing.wav'},
      {'audio_file': 'P:\\OneDrive - IIT Delhi\\IIT D PhD\\Research work\\Smartphone addiction\\Experiment1.2\\code\\bing.wav'},
      {'audio_file': 'P:\\OneDrive - IIT Delhi\\IIT D PhD\\Research work\\Smartphone addiction\\Experiment1.2\\code\\bing.wav'},
      {'audio_file': 'P:\\OneDrive - IIT Delhi\\IIT D PhD\\Research work\\Smartphone addiction\\Experiment1.2\\code\\bing.wav'},
      {'audio_file': 'P:\\OneDrive - IIT Delhi\\IIT D PhD\\Research work\\Smartphone addiction\\Experiment1.2\\code\\bing.wav'}]
    Routine vedio_withaudio_B1
  LoopTerminator trials
  Routine Block2
  Routine start_again
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = sequential
    nReps = 20
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    Routine Vedio_audio_B2
  LoopTerminator trials_2
  Routine thank_you
